PsychoPy2experiment version="1.90.1"
Settings
  expName = DARC Demo Experiment
  Experiment info = {'participant': '', 'trials': '20', 'particles': '10000'}
  Full-screen window = True
  Window size (pixels) = [2560, 1440]
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
  logging level = debug
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Routines
  Routine trial
    CodeComponent do_not_edit
      Begin Experiment:
        # Code snippets in this PsychoPy code component relate to
        # generic Bayesian Adaptive Design. As such, these should stay the
        # same for any experiment domain, whether that be Delayed And Risky
        # Choice (DARC) tasks, or any other which we develop in the future
        # such as visual psychophysics experiments.
        #
        # ** THIS CODE COMPONENT SHOULD BE AT THE TOP IN THE BUILDER VIEW **


        # Point Python to the path where we have installed the bad and darc packages
        import sys
        sys.path.insert(0, '../..') # relative coding of 'up' two folders.

        # Set up a logger: we will log our BAD stuff seperately from the PsychoPy
        # logger.
        import logging
        logging.basicConfig(filename=filename+'_BAD.log',
            level=logging.DEBUG,
            format='%(asctime)s:%(levelname)s:%(funcName)s:%(message)s')


        # HANDLING OF NUMBER OF TRIALS
        # We will tell the PsychoPy trial loop thing that we will have an
        # arbitrarily high number of trials, but then our design object will take
        # care of breaking from the trial loop as and when we are done
        max_trials = 666
        # Number of trials obtained from the PsychoPy GUI is stored as a string
        # so we need to convert that to an integer.
        expInfo['trials'] = int(expInfo['trials'])
        # Convert number of particles from the GUI to an integer
        expInfo['particles'] = int(expInfo['particles'])


        # we start with no previous response
        last_response_chose_B = None


        # useful helper functions

        def was_last_response_B(last_keypress):
            '''this function returns last_response_chose_delayed as True or False,
            taking into account the location of the immediate and delayed rewards.
            last_keypress is either 'left' or 'right'
            '''
            if last_keypress == 'left':
                last_response_chose_B= False
            elif last_keypress == 'right':
                last_response_chose_B = True
            else:
                error('unexpected response.keys')
            return last_response_chose_B
      Begin Routine:
        # DESIGN GENERATOR =================================================
        design = design_thing.get_next_design(model)

        # If we are out of designs, then break out of the trial loop
        if design is None:
            print('Breaking out of trial loop now')
            break

        # NOTE TO EXPERIMENTER: if we want to do any adjusments to the design,
        # such as rounding up significant figures etc, we should do that here to
        # the actual design itself rather than just the text displayed to
        # participants. That way the data we output will correspond exactly to the
        # prospects actually shown to participants.
      End Routine:
        # Clear screen as soon as we press the button. Useful because the code
        # below can take a moment to run before things are cleared, which leads to
        # crappy responsivity
        win.flip()

        # Turn the response from PsychoPy into a True/False, did they choose B?
        last_response_chose_B = was_last_response_B(response.keys)

        # update the (design, response) pair in the design_thing
        design_thing.enter_trial_design_and_response(design, last_response_chose_B)

        # BEN (NOTE TO SELF): in theory we could be calculating updated beliefs
        # based on both possible responses *while the participant is thinking
        # during the trial* and then going with the pre-computed version once they
        # make their response. Could do this multi-threaded etc :)
        # This would probably chew through laptop battery power pretty quickly though.
        model.update_beliefs(design_thing.get_df())
      End Experiment:
        # export parameter summary
        # TODO: leave like this or have as a method of `model`
        model.θ.describe().to_csv(filename+'_parameter_summary.csv')

        # export all particles, full posterior
        model.θ.to_csv(filename+'_parameter_all_particles.csv')

        # visualise posterior distributions
        try:
            model.export_posterior_histograms(filename)
        except Exception as err:
            print('FAILED to export posterior histograms as .pdf')
            print(f'Error {err}')
    CodeComponent darc
      Begin Experiment:
        # Import our DARC design code
        #from darc.designs import Kirby2009, Frye, BayesianAdaptiveDesignGeneratorDARC

        # Import useful namedtuples
        from darc import Prospect, Design

        # Now we will chose our (design, model) combination.
        # The lines below do this via a GUI, which is intended just for demo purposes.
        # For actual experiments, I recommend replacing the GUI and just replacing these
        # lines of code with your particular desired design and model combination.
        from chooser import gui_chooser_for_demo
        design_thing, model = gui_chooser_for_demo(
            win, gui, core, event, expInfo)

        # Example of how to do this manually. See https://github.com/drbenvincent/darc-experiments-python
        # for more info
        #     design_thing = DARC_Designs(max_trials=expInfo['trials'])
        #     from darc.delayed import models
        #     model = models.Hyperbolic(n_particles=expInfo['particles'])


        # If you want to customise the files saves (name + location) then edit this
        # line, which overwrites what PsychoPy does by default
        #     filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])


        def design_to_display_strings(design):
            '''A function to convert a design into strings available for PsychoPy
            to print to screen'''
            # rewards -------------------------
            text_RA = f'£{design.ProspectA.reward:0.2f}'
            text_RB = f'£{design.ProspectB.reward:0.2f}'

            # delays --------------------------
            text_DA = days_to_string(design.ProspectA.delay)
            text_DB = days_to_string(design.ProspectB.delay)

            # probabilities -------------------
            text_PA = f'{design.ProspectA.prob*100}%'
            text_PB = f'{design.ProspectB.prob*100}%'
            return (text_RA, text_RB, text_DA, text_DB, text_PA, text_PB)


        # TODO: this will be refactored and/or moved into a python file in
        # the darc package
        def days_to_string(delay_days):
            '''convert a number of days to a sensible string'''
            DAYS_PER_MONTH = 30

            if delay_days == 0:
                delay_text = f'now'

            elif delay_days < 1/24:
                mins = delay_days*(24*60)
                if mins == 1:
                    delay_text = f'in {mins:0.0f} minuite'
                else:
                    if mins.is_integer():
                        delay_text = f'in {mins:0.0f} minuites'
                    else:
                        delay_text = f'in {mins:0.2f} minuites'

            elif delay_days < 1:
                hours = delay_days*24
                if hours == 1:
                    delay_text = f'in {hours:0.0f} hour'
                else:
                    if hours.is_integer():
                        delay_text = f'in {hours:0.0f} hours'
                    else:
                        delay_text = f'in {hours:0.2f} hours'

            elif delay_days < 7:
                days = delay_days
                if days == 1:
                    delay_text = f'in {days:0.0f} day'
                else:
                    if days.is_integer():
                        delay_text = f'in {days:0.0f} days'
                    else:
                        delay_text = f'in {days:0.2f} days'

            elif delay_days < 30:
                weeks = delay_days/7
                if weeks == 1:
                    delay_text = f'in {weeks:0.0f} week'
                else:
                    if weeks.is_integer():
                        delay_text = f'in {weeks:0.0f} weeks'
                    else:
                        delay_text = f'in {weeks:0.2f} weeks'

            elif delay_days < 365:
                months = delay_days/DAYS_PER_MONTH
                if months == 1:
                    delay_text = f'in {months:0.0f} month'
                else:
                    if months.is_integer():
                        delay_text = f'in {months:0.0f} months'
                    else:
                        delay_text = f'in {months:0.2f} months'

            else:
                years = delay_days/365
                if years == 1:
                    delay_text = f'in {years:0.0f} year'
                else:
                    if years.is_integer():
                        delay_text = f'in {years:0.0f} years'
                    else:
                        delay_text = f'in {years:0.2f} years'

            return delay_text
      Begin Routine:
        # convert the design into meaningful strings
        text_RA, text_RB, text_DA, text_DB, text_PA, text_PB = design_to_display_strings(design)
      End Routine:
        # add DARC specific data, eventually exported by PsychoPy as a .csv
        # note: the name here (ie `trials` has to match the PsychoPy trial
        # loop object name
        trials.addData('RA', design.ProspectA.reward)
        trials.addData('DA', design.ProspectA.delay)
        trials.addData('PA', design.ProspectA.prob)

        trials.addData('RB', design.ProspectB.reward)
        trials.addData('DB', design.ProspectB.delay)
        trials.addData('PB', design.ProspectB.prob)

        if last_response_chose_B:
            trials.addData('R', 'B')
        else:
            trials.addData('R', 'A')
      End Experiment:
        # visualise the data (designs and responses)
        from darc.data_plotting import data_plotter

        try:
            data_plotter(design_thing.get_df(), filename)
        except Exception as err:
            print('FAILED to export plot of response data as .pdf')
            print(f'Error: {err}')
    TextComponent RAitem
      startVal [time (s)] = 0
      pos = (-0.4, 0.2)
      text [set every repeat] = $text_RA
      font = Calibri
      letterHeight = 0.1
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    TextComponent DAitem
      startVal [time (s)] = 0
      pos = (-0.4, 0)
      text [set every repeat] = $text_DA
      font = Calibri
      letterHeight = 0.1
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    TextComponent PAitem
      startVal [time (s)] = 0
      pos = (-0.4, -0.2)
      text [set every repeat] = $text_PA
      font = Calibri
      letterHeight = 0.1
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    TextComponent RBitem
      startVal [time (s)] = 0
      pos = (0.4,0.2)
      text [set every repeat] = $text_RB
      font = Calibri
      letterHeight = 0.1
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    TextComponent DBitem
      startVal [time (s)] = 0
      pos = (0.4, 0)
      text [set every repeat] = $text_DB
      font = Calibri
      letterHeight = 0.1
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    TextComponent PBitem
      startVal [time (s)] = 0
      pos = (0.4, -0.2)
      text [set every repeat] = $text_PB
      font = Calibri
      letterHeight = 0.1
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    KeyboardComponent response
      startVal [time (s)] = 0.15
      allowedKeys = 'left','right'
      forceEndRoutine = True
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    TextComponent instruction_text
      startVal [time (s)] = 0.0
      pos = (0,0.8)
      text = left or right keys to chose
      letterHeight = 0.1
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  Routine bye
    TextComponent goodbye
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for taking part in science!
      letterHeight = 0.1
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  Routine instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        You will be presented with choices between 2 amounts of money.
        Some will be delivered at different points in time.
        Some have a certain probability of being recieved. If not, you recieve nothing.

        Your job is to consider which you prefer and choose using the LEFT or RIGHT keys.

        There is no correct or incorrect response, please emphasise accuracy in which choice you prefer, no need to rush!

        Press SPACE to continue.
    KeyboardComponent space_press
      startVal [time (s)] = 1.0
      allowedKeys = 'space'
      store = nothing
      forceEndRoutine = True
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    nReps = 666
    loopType = sequential
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    Routine trial
  LoopTerminator trials
  Routine bye
